opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Plating OD600 from 96x deepwell
author: Alex Perkins - NLLAB
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  OD600 Plate: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 5}
  LB Reservoir: {definitionId: opentrons/opentrons_10_tuberack_nest_4x50ml_6x15ml_conical/1, slot: 6}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 9}
  Overnight Plate: {definitionId: custom_beta/nllab_thermoscientificnunc_96_wellplate_1300ul/1, slot: 8}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - LB: {description: Standard E.coli growth media}
ingredLocations:
  LB Reservoir:
    LB {volume: 22000}: A3
    LB {volume: 2000}: A1
  Overnight Plate:
    LB {volume: 300}: A1-H1, A2-H2, A3-E3, A5, B5, D5, E5, A7-C7, A9-D9, A11, F5, G5, C6
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 1675
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A1
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  dispense_labware: LB Reservoir
  dispense_wells: C1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 55
  path: multiAspirate
  changeTip: once
  aspirate_labware: Overnight Plate
  aspirate_wells: A1-H1, A2-H2, A3-E3, A5, B5, D5-G5, C6, A7-C7, A9-D9, A11
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  dispense_labware: LB Reservoir
  dispense_wells: C1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: A1
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  dispense_labware: OD600 Plate
  dispense_wells: A1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: B1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: B1
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  dispense_labware: OD600 Plate
  dispense_wells: B1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: C1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: C1
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  dispense_labware: OD600 Plate
  dispense_wells: C1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: D1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: D1
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  dispense_labware: OD600 Plate
  dispense_wells: D1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: E1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: E1
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  dispense_labware: OD600 Plate
  dispense_wells: E1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: F1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: F1
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  dispense_labware: OD600 Plate
  dispense_wells: F1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: G1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: G1
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  dispense_labware: OD600 Plate
  dispense_wells: G1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: H1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: H1
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  dispense_labware: OD600 Plate
  dispense_wells: H1
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: A2
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  dispense_labware: OD600 Plate
  dispense_wells: A2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: B2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: B2
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  dispense_labware: OD600 Plate
  dispense_wells: B2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: C2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: C2
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  dispense_labware: OD600 Plate
  dispense_wells: C2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: D2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: D2
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  dispense_labware: OD600 Plate
  dispense_wells: D2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: E2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: E2
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  dispense_labware: OD600 Plate
  dispense_wells: E2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: F2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: F2
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  dispense_labware: OD600 Plate
  dispense_wells: F2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: G2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: G2
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  dispense_labware: OD600 Plate
  dispense_wells: G2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: H2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: H2
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  dispense_labware: OD600 Plate
  dispense_wells: H2
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: A3
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  dispense_labware: OD600 Plate
  dispense_wells: A3
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: B3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: B3
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  dispense_labware: OD600 Plate
  dispense_wells: B3
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: C3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: C3
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  dispense_labware: OD600 Plate
  dispense_wells: C3
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: D3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: D3
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  dispense_labware: OD600 Plate
  dispense_wells: D3
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: E3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: E3
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  dispense_labware: OD600 Plate
  dispense_wells: E3
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: A5
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  dispense_labware: OD600 Plate
  dispense_wells: A5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: B5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: B5
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  dispense_labware: OD600 Plate
  dispense_wells: B5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: C6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: C6
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  dispense_labware: OD600 Plate
  dispense_wells: C6
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: D5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: D5
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  dispense_labware: OD600 Plate
  dispense_wells: D5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: E5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: E5
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  dispense_labware: OD600 Plate
  dispense_wells: E5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: F5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: F5
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  dispense_labware: OD600 Plate
  dispense_wells: F5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: G5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: G5
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  dispense_labware: OD600 Plate
  dispense_wells: G5
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: A7
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  dispense_labware: OD600 Plate
  dispense_wells: A7
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: B7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: LB Reservoir
  aspirate_wells: A1
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  dispense_labware: OD600 Plate
  dispense_wells: B7
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: C7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: C7
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  dispense_labware: OD600 Plate
  dispense_wells: C7
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: A9
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  dispense_labware: OD600 Plate
  dispense_wells: A9
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: B9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: B9
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  dispense_labware: OD600 Plate
  dispense_wells: B9
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: C9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: C9
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  dispense_labware: OD600 Plate
  dispense_wells: C9
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: D9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: D9
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  dispense_labware: OD600 Plate
  dispense_wells: D9
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 270
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 30
  path: single
  changeTip: never
  aspirate_labware: Overnight Plate
  aspirate_wells: A11
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  dispense_labware: OD600 Plate
  dispense_wells: A11
  dispense_flowRate: 100
  dispense_mix_checkbox: true
  dispense_mix_times: 1
  dispense_mix_volume: 250
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_single_gen2
  volume: 300
  path: single
  changeTip: once
  aspirate_labware: LB Reservoir
  aspirate_wells: A3
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  aspirate_touchTip_checkbox: true
  dispense_labware: OD600 Plate
  dispense_wells: H11, H12
labwareDefinitions:
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  custom_beta/nllab_thermoscientificnunc_96_wellplate_1300ul/1:
    brand: {brand: Thermo Scientific Nunc 96 Well Plate 1300 µL, brandId: [260251, 260252]}
    metadata: {displayName: nllab_thermoscientificnunc_96_wellplate_1300ul, displayCategory: wellPlate, displayVolumeUnits: µL, tags: []}
    dimensions: {xDimension: 127.76, yDimension: 85.47, zDimension: 31.6}
    parameters: {format: irregular, quirks: [], isTiprack: false, isMagneticModuleCompatible: false, loadName: nllab_thermoscientificnunc_96_wellplate_1300ul}
    namespace: custom_beta
    version: 1
    wells:
      A1: {depth: 29.1, totalLiquidVolume: 1300, shape: circular, diameter: 8.4, x: 14.4, y: 74.27, z: 2.5}
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commands:
- pickUpTip: {pipette: p300_single_gen2, labware: Opentrons 96 Tip Rack 300 µL (1), well: A1}
- aspirate: {pipette: p300_single_gen2, volume: 300, labware: LB Reservoir, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 300, labware: LB Reservoir, well: C1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 300, labware: LB Reservoir, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
- dispense: {pipette: p300_single_gen2, volume: 300, labware: LB Reservoir, well: C1, offsetFromBottomMm: 0.5, flowRate: 46.43}
- aspirate: {pipette: p300_single_gen2, volume: 300, labware: LB Reservoir, well: A1, offsetFromBottomMm: 1, flowRate: 46.43}
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